PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = StroopExp
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $letterColor
      text [set every repeat] = $word
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent trialResp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine endExp
    TextComponent text_4
      text = Thank you for your participation!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine rest
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You can now take a short break!

        Press the space bar when you
        are ready to continue!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Remember to respond to the
        color, not the word!

        left = red
        down = green
        right = blue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': u'red', 'congruent': 1, 'corrAns': u'left', 'letterColor': u'red'},
      {'text': u'red', 'congruent': 0, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 1, 'corrAns': u'down', 'letterColor': u'green'},
      {'text': u'green', 'congruent': 0, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 1, 'corrAns': u'right', 'letterColor': u'blue'},
      {'text': u'blue', 'congruent': 0, 'corrAns': u'left', 'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine rest
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'congruent': 1, 'word': u'red', 'corrAns': u'left', 'letterColor': u'red'},
      {'congruent': 0, 'word': u'red', 'corrAns': u'down', 'letterColor': u'green'},
      {'congruent': 1, 'word': u'green', 'corrAns': u'down', 'letterColor': u'green'},
      {'congruent': 0, 'word': u'green', 'corrAns': u'right', 'letterColor': u'blue'},
      {'congruent': 1, 'word': u'blue', 'corrAns': u'right', 'letterColor': u'blue'},
      {'congruent': 0, 'word': u'blue', 'corrAns': u'left', 'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials_2
  Routine rest
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'congruent': 1, 'word': u'red', 'corrAns': u'left', 'letterColor': u'red'},
      {'congruent': 0, 'word': u'red', 'corrAns': u'down', 'letterColor': u'green'},
      {'congruent': 1, 'word': u'green', 'corrAns': u'down', 'letterColor': u'green'},
      {'congruent': 0, 'word': u'green', 'corrAns': u'right', 'letterColor': u'blue'},
      {'congruent': 1, 'word': u'blue', 'corrAns': u'right', 'letterColor': u'blue'},
      {'congruent': 0, 'word': u'blue', 'corrAns': u'left', 'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials_3
  Routine endExp
