PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = str_brk_file
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $color
      text [set every repeat] = $word
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left','right','down','space'
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = brk_conditions.xlsx
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
