PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = stroop_break
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $letterColor
      text [set every repeat] = $word
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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  Routine brk
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take a break.

        Press space to continue
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine brk
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_2
  Routine brk
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_3
  Routine brk
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_4
  Routine brk
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials_5
